OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Temporal Filter => #1
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 5
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 40
  Band Pass Ripple (dB) = 0.5
Clock stimulator => #2
  Interstimulation interval (in sec) = 40
  Stimulation = OVTK_StimulationId_Label_00
Data=#1, Stimulations=#2 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Signal=#0.Signal stream, Stimulation=#2 -> GDF file writer
  Filename = D:/UDEA-MAESTRIA/Proyecto/Estimulos/Estimulos V2/Registros/Stroop_EEG

Keyboard stimulator
  Filename = ${Path_Data}/plugins/stimulation/simple-keyboard-to-stimulations.txt
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_03
  Action to perform = Stop

Clock stimulator
  Interstimulation interval (in sec) = 287
  Stimulation = OVTK_StimulationId_Label_01
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_01
  Action to perform = Stop
