OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)

0x341d3912 Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Temporal Filter => #1
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 5
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 40
  Band Pass Ripple (dB) = 0.5
Clock stimulator => #2
  Interstimulation interval (in sec) = 4
  Stimulation = OVTK_StimulationId_Label_01
Data=#1, Stimulations=#2 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input stream=#0.Signal stream, Stimulations stream=#2 -> CSV File Writer
  Filename = D:/UDEA-MAESTRIA/Thesis result/Set Stimuli/OpenDesigner/Recordings csv/acuity.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Clock stimulator => #5
  Interstimulation interval (in sec) = 0.125
  Stimulation = OVTK_StimulationId_Label_00
New input=#5, New input 2=#2 -> Python scripting
  Clock frequency (Hz) = 128
  Script = D:/UDEA-MAESTRIA/Thesis result/Set Stimuli/OpenDesigner/acuityCode.py

Clock stimulator
  Interstimulation interval (in sec) = (4*7*6) +  4
  Stimulation = OVTK_StimulationId_Label_01
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_01
  Action to perform = Stop
