PsychoPy2experiment version="3.0.0b11"
Settings
  Completed URL = completedURL
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Incomplete URL = incompleteURL
  Monitor = LabClinica
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1366, 768]
  expName = dots
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Routines
  Routine trial
    TextComponent Wait
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Espera para empezar
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Dots
    DotsComponent dots
      coherence = 1
      dir [set every repeat] = $direccion
      dotLife = 20
      dotSize = 22
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 15
      nDots = 120
      noiseDots = direction
      refreshDots = repeat
      signalDots = different
      speed = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      units = cm
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  Routine wait
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  Routine trial
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = estimuloDot.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('direccion', 45)]),
      OrderedDict([('direccion', 180)]),
      OrderedDict([('direccion', 90)]),
      OrderedDict([('direccion', 0)]),
      OrderedDict([('direccion', 135)]),
      OrderedDict([('direccion', 270)]),
      OrderedDict([('direccion', 0)]),
      OrderedDict([('direccion', 45)]),
      OrderedDict([('direccion', 180)]),
      OrderedDict([('direccion', 135)])]
    Routine Dots
  LoopTerminator trials
  Routine wait
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = estimuloDot.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('direccion', 45)]),
      OrderedDict([('direccion', 180)]),
      OrderedDict([('direccion', 90)]),
      OrderedDict([('direccion', 0)]),
      OrderedDict([('direccion', 135)]),
      OrderedDict([('direccion', 270)]),
      OrderedDict([('direccion', 0)]),
      OrderedDict([('direccion', 45)]),
      OrderedDict([('direccion', 180)]),
      OrderedDict([('direccion', 135)])]
    Routine Dots
  LoopTerminator trials_2
  Routine wait
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = estimuloDot.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('direccion', 45)]),
      OrderedDict([('direccion', 180)]),
      OrderedDict([('direccion', 90)]),
      OrderedDict([('direccion', 0)]),
      OrderedDict([('direccion', 135)]),
      OrderedDict([('direccion', 270)]),
      OrderedDict([('direccion', 0)]),
      OrderedDict([('direccion', 45)]),
      OrderedDict([('direccion', 180)]),
      OrderedDict([('direccion', 135)]),
      OrderedDict([('direccion', 45)]),
      OrderedDict([('direccion', 90)])]
    Routine Dots
  LoopTerminator trials_3
  Routine wait
